PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = seq_teaching_exp
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Routines
  Routine Training_1
    TextComponent train1_txt1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Training phase 1
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  Routine Performance_1
    TextComponent Perf1_txt1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Performance phase 1
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  Routine Training_2
    TextComponent train2_txt1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Training phase 2
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  Routine Performance_2
    TextComponent Perf2_txt1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Performance phase 2
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  Routine Performance_3
    TextComponent Perf3_txt1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Performance phase 3
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  Routine Briefing
    TextComponent gen_info
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Some initial general information:

        TBC
    ButtonComponent brf_btn
      anchor = bottom-right
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = [2,1]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Next
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  Routine Raven_Matrices
    TextComponent pre_test_txt1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
      text = Pre-training phase
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  Routine Debriefing
    TextComponent debrf_info
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Thank you for participating in this experiment.

        We would like to know some information about you.

        All records will be kept strictly confidental (privacy statement TBC).

        Please click the relevant option for you concerning your background.
    ButtonComponent debrf_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Finish
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  Routine Instructions_2
    TextComponent instr2_txt1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Instructions TBC
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    ImageComponent instr2_ex1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent instr_ex2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent instr_ex3
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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  Routine Instructions_1
    TextComponent instr1_txt1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        Some instructions for the performance questions
    ButtonComponent instr1_btn
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = next
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    ImageComponent instr1_ex1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent instr1_ex2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ImageComponent instr1_ex3
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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Flow
  Routine Briefing
  Routine Raven_Matrices
  Routine Instructions_1
  Routine Training_1
  Routine Performance_1
  Routine Instructions_2
  Routine Training_2
  Routine Performance_2
  Routine Performance_3
  Routine Debriefing
